<CompuCell3D Revision="2" Version="4.6.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="1024" y="1024" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Cell1"/>
      <CellType TypeId="2" TypeName="Cell2"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Cell1">5.0</Energy>
      <Energy Type1="Medium" Type2="Cell2">5.0</Energy>
      <Energy Type1="Cell1" Type2="Cell1">10.0</Energy>
      <Energy Type1="Cell1" Type2="Cell2">10.0</Energy>
      <Energy Type1="Cell2" Type2="Cell2">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="BoundaryPixelTracker">
   
   <!-- Module tracking boundary pixels of each cell -->
   <NeighborOrder>1</NeighborOrder>
    </Plugin>

   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="512" y="512" z="0"/>
         <Radius>4</Radius>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>Cell1</Types>
      </Region>
   </Steppable>
</CompuCell3D>
